
synapse stdp0:

  state:
    w real = 1.
  end

  parameters:
    d ms = 1 ms  @nest::delay   # !!! cannot have a variable called "delay"
    lambda real = .01
    tau_tr_pre ms = 20 ms
    tau_tr_post ms = 20 ms
    alpha real = 1
    mu_plus real = 1
    mu_minus real = 1
    Wmax real = 100.
    Wmin real = 0.
  end

  equations:
    kernel pre_trace_kernel = exp(-t / tau_tr_pre)
    inline pre_trace real = convolve(pre_trace_kernel, pre_spikes)

    # all-to-all trace of postsynaptic neuron
    kernel post_trace_kernel = exp(-t / tau_tr_post)
    inline post_trace real = convolve(post_trace_kernel, post_spikes)
  end

  input:
    pre_spikes nS <- spike
    post_spikes nS <- spike
    post_ATP real <- continuous
  end

  output: spike

  onReceive(post_spikes):
    # potentiate synapse
    # following line works
    #w_ real = Wmax * ( w / Wmax  + (lambda * ( 1. - ( w / Wmax ) )**mu_plus * pre_trace ))
    # following line **does not** work!
    if post_ATP > 0:
        println("yes")
    end
    w_ real = post_ATP * Wmax * ( w / Wmax  + (lambda * ( 1. - ( w / Wmax ) )**mu_plus * pre_trace ))
    w = min(Wmax, w_)
  end

  onReceive(pre_spikes):
    # depress synapse
    w_ real = Wmax * ( w / Wmax  - ( alpha * lambda * ( w / Wmax )**mu_minus * post_trace ))
    w = max(Wmin, w_)

    # deliver spike to postsynaptic partner
    deliver_spike(w, d)
  end
end

